PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['paths.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1710, 1112]
  expName = grouping-vwm-task
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine start
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    CodeComponent code_JS
      Code Type = JS
      disabled = True
      Before JS Experiment:
        Object.defineProperty(TrialHandler.prototype, "trialIterator", {
          get() {
            return this[Symbol.iterator]();
          }
        });

        TrialHandler.prototype.next = function() {
          const { value } = this.trialIterator.next()

          return value
        }
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
      End JS Routine:
        experimentInit();
    CodeComponent code_setup
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        yScale=.40
        minSize = .01
        maxSize = .1
        cuePulse = 3
        pathStart=[0,0]
        pathN = 0
        xScale=win.size[0]/win.size[1]*.45
    CodeComponent code_clock
      Code Type = Both
      disabled = True
      Begin Experiment:
        posClock = core.Clock()
        sizeClock = core.Clock()
      Begin JS Experiment:
        posClock = new util.Clock();
        sizeClock = new util.Clock();
    CodeComponent code_paths
      Code Type = Py
      disabled = True
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      Begin Experiment:
        myPaths = data.TrialHandler(
        nReps=1,
        method='sequential',
        extraInfo=expInfo,
        originPath=-1,
        trialList=data.importConditions('test1_aln_2025-12-01.csv'),
        seed=None,
        name='myTrials')
    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome! Watch the ball move across the screen

        Press Space to continue
    KeyboardComponent keyContinue2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine memoryInstructions
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    TextComponent Intructions2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now be shown the ball at different positions, if the ball was perviously in that position, press F, if not press J

        Press Space to Continue
    KeyboardComponent keyContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        The experiment is complete

        Thank You!
  Routine jumpy
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    PolygonComponent eclipse
      fillColor = white
      pos [set every repeat] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine smooth
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    CodeComponent code_moves
      Code Type = Py
      disabled = True
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      Begin Routine:
        # Start at origin
        pathStart = [0, 0]

        # Initialize path index
        pathN = 0

        # Filter myTrials down to just THIS trial (how do I iterate over trials in PsychoPy?)

        # Get first point from Excel loop
        if pathN < len(myPaths.trialList):
            thisPath = myPaths.trialList[pathN]
            pathEnd = [float(thisPath['xPos']), float(thisPath['yPos'])]
        else:
            # No points in Excel, end routine immediately
            continueRoutine = False

        # Movement speed (adjust for smoothness)
        stepSize = 0.005

        # Initial circle position
        cuePos = tuple(pathStart)
      Each Frame:
        # Make sure there is a target
        if pathN >= len(myPaths.trialList):
            continueRoutine = False
        else:
            dx = pathEnd[0] - pathStart[0]
            dy = pathEnd[1] - pathStart[1]
            dist = (dx**2 + dy**2)**0.5

            if dist > stepSize:
                # Move a small step toward the target
                newX = pathStart[0] + dx/dist * stepSize
                newY = pathStart[1] + dy/dist * stepSize
                pathStart = [newX, newY]
                cuePos = (newX, newY)
            else:
                # Snap to target
                pathStart = pathEnd[:]
                cuePos = tuple(pathEnd)

                # Move to next point
                pathN += 1
                if pathN >= len(myPaths.trialList):
                    continueRoutine = False  # reached last point
                else:
                    thisPath = myPaths.trialList[pathN]
                    pathEnd = [float(thisPath['xPos']), float(thisPath['yPos'])]
    PolygonComponent cue
      fillColor = white
      nVertices = 72
      pos [set every frame] = cuePos
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine memoryTrialSingle
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    PolygonComponent circle
      fillColor = white
      pos [set every frame] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'f', 'j'
      correctAns = $correctAns
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        circle.pos = (0, 0)
      Begin Routine:
        circle.pos = (0,0)
  Routine spacer
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = this is the end of the single stimuli
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  Routine sequence_1
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    PolygonComponent cir1
      fillColor = white
      pos [set every frame] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ppp
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  Routine sequence_2
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    PolygonComponent cir2
      fillColor = white
      pos [set every frame] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = aaaa
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine test
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = is ut worjing
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  Routine memoryTrialSequence
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    PolygonComponent circ
      fillColor = white
      pos [set every frame] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine test_2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the sequence the same as previously
        Press F if it was the same and J if not
    KeyboardComponent key_resp_2
      allowedKeys = 'f', 'j'
      correctAns = $isSame
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine tester
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = one showed up 
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  Routine spacer2
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = this is the end of the jumpy
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  Routine VWM_memory_display
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    CodeComponent memory_sequence_code
      Code Type = Py
      Before Experiment:
        import random

        random.seed = 1

        def get_random_path_coord( coords_to_avoid ):
            # Select random x and y values that are different from those in coords_to_avoid
            x = coords_to_avoid[0]
            while abs(x - coords_to_avoid[0]) < 0.2:
                x = round(random.uniform(-1, 1), 1)
            y = coords_to_avoid[1]
            while abs(y - coords_to_avoid[1]) < 0.2:
                y = round(random.uniform(-1, 1), 1)
            coord = (x,y)
            return coord
      Begin Experiment:
        # Set path parameters
        path_length = 5

        # Movement speed (adjust for smoothness)
        stepSize = 0.005
      Begin Routine:
        # Get locations for this trial

        path_coords = []
        ## path coords is a list of (x,y) tuples
        for segment in range(path_length):
            if segment == 0:
                segment_coord = (0,0)
            else:
                segment_coord = get_random_path_coord(path_coords[segment-1])

            path_coords.append(segment_coord)
        print(path_coords)

        # Initialize path steps
        segment = 0

        if segment < path_length:
            path_start = path_coords[segment]
            path_end = path_coors[segment + 1]
        else:
            continueRoutine = False

        # Initial circle position
        disc_position = path_start
      Each Frame:
        # Add disc movement here
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment_control_files/trial-types_aln_2025-12-01.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('memory_type', 'continuous'), ('probe_type', 'discrete')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'continuous')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'discrete')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'continuous')])]
    Routine VWM_memory_display
  LoopTerminator trials
